' note: if the file name contains more than 1 dot ".", the channel name would only contain the strings before the first dot. 
'       this is limitation of export function 
' to keep consistence between the name of .mat file and the variables it contained, the .mat file also only include the strings
'       before the 1st dot "."; 

var vh%, stt, ent, chan%,neuo%,bird%,stchan%,edchan%,savchan%,title$;
var name$;
var instruction$; 
var birdID$; 
var birdextra$, residual$; 
var v711%; 'View created by FileOpen()
' Open the data file that you want to extract 
v711%:=FileOpen("E:\\FR_Data_Analysis\\Saclofen\\*.smr",0,3,"Please select the data file you want to extract: ");  
View(v711%); ' Set the opened data file to "Current View"

stchan% := 2;  'Only extract the spike time for sorted units but not raw recording which is stored in channel 2-17
edchan% := 4;  ' Included all channles whose number is bigger than 18

birdID$ :=FileName$(3);  ' This takes the filename of the current view and use it to name the extracted matlab files
birdextra$ := FileName$(4); ' Obtain the possible trialing number of the file name
birdID$ := birdID$ + birdextra$; ' Obtain the whole name of the data file
if Right$(birdID$, 1) = "." then  ' if the original file name contains more than one dot "."
    TrimRight(birdID$, ".");  ' then remove the dot
endif
'. Main function
vh% :=View();
CursorSet(0);
instruction$ := "Please Select where you want to save the data: ";
FilePathSet("",0,instruction$);  ' Select the directory that you want to store the extracted spiketiming

for chan% := stchan% to edchan% do	
    
    title$ := ChanTitle$(chan%);  ' Test if the channel exists; if not, go to next channel without doing export. 
    if Len(title$)= 0 then;
    continue
    endif
    
    if chan% > 1 and chan% < 18 then
        ChanProcessAdd(chan%, 10); 'Add Fill gaps to channel 1	
    endif  
   
    ExportChanList(1); 'Initialise the channel list
    ExportChanList(0,MaxTime(1),chan%,30,32); 
   'name$ :="A" + str$(bird%) + "c" + str$(neuo%) + ".mat" ;
    name$ :=birdID$ + "_" + ChanTitle$(chan%)+ ".mat";
   ' Original Code:  name$ :=birdcolor$ + str$(bird%) + ChanTitle$(chan%)+ ".mat";
    FileSaveAs(name$,100,0,"",0,
    "UseSName=1|UseCName=1|WaveTimes=1|BinFreq=0|BinTimes=0|WaveData=2|MarkAs=1|TMarkAs=2|RMarkAs=2|RMarkData=2|WaveMarkAs=0|WaveMarkData=2|Compatability=0"); 'Export (string args)

next;

'FileClose(0,0);  ' if you want to close the data file after opening it, uncomment this line
